PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Gender': '', 'Age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 800]
  expName = RSD11
  frameRate = 60
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine Setup
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        import numpy as np
        import colorsys

        def circ_diff_deg(a, b, period=360.0):
            diff = (a - b + period/2.0) % period - period/2.0
            return diff

        def hue_to_rgb(hue_deg):
            h = hue_deg / 360.0
            r, g, b = colorsys.hsv_to_rgb(h, 1.0, 1.0)
            return [(r*2-1), (g*2-1), (b*2-1)]

        def wrap_angle(angle, lower=0, upper=180):
            range_width = upper - lower
            return (angle - lower) % range_width + lower
      Begin Routine:
        # --- 预先生成色轮 (Line Stimuli) ---
        # 在Builder里，我们不在每一帧创建，而是一次性创建好，之后只调用 draw()
        wheel_lines = []
        radius = 5.0
        line_width = 4.0 # Builder里线条宽度单位可能不同，根据视觉效果调整
        n_segments = 360

        for i in range(n_segments):
            angle = (i / n_segments) * 360.0
            rad = np.radians(angle)
            x1 = radius * np.cos(rad)
            y1 = radius * np.sin(rad)
            x2 = (radius + 0.5) * np.cos(rad) # 长度
            y2 = (radius + 0.5) * np.sin(rad)

            # 创建Line对象 (注意 win 是 builder 自动创建的 window 对象)
            line = visual.Line(win, start=(x1, y1), end=(x2, y2),
                               lineColor=hue_to_rgb(angle), lineWidth=line_width,
                               units='deg', colorSpace='rgb')
            wheel_lines.append(line)

        # 创建一个用于反馈的小圆点
        color_patch = visual.Circle(win, radius=1.5, pos=(0,0), units='deg', fillColor=[0,0,0], lineColor=None)
  Routine Instr
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    TextComponent text_norm
      letterHeight = 0.06
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome to the experiment.

        On each trial, you will see a colored line. Please memorize its color and orientation. After it disappears, a cue letter will then indicate which feature to report:

        "O" (Orientation): Rotate the central white line to match the angle you remember.
        "C" (Color): Select the matching color on the color wheel.
        "A" (Any): The test feature is not decided yet. Maintain both features in memory until the test screen appears.

        1. Please respond within 6 seconds. Left-click to confirm your answer.
        2. After responding, rate your confidence on a scale of 1-7(1 = no confidence, 7=high confidence)


        Press SPACE to begin when you are prepared.
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = first key
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    CodeComponent Mouse
      Code Type = Py
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      Begin Routine:
        #import paramatrix
        mouse_ori.setVisible(False)
  Routine encoding
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    PolygonComponent stim_bar
      fillColor [set every repeat] = $hue_to_rgb(col_stim_hue)
      lineColor [set every repeat] = $hue_to_rgb(col_stim_hue)
      lineWidth [set every repeat] = 1
      opacity = 0
      ori [set every repeat] = ori_stim
      saveStartStop = False
      shape = rectangle
      size = (0.6, 6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      syncScreenRefresh = False
      units = deg
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import numpy as np

        rng = np.random.default_rng()

        # build 180 hue wheel (0,2,4,...,358)
        hue_wheel = np.linspace(0, 360, 180, endpoint=False)
      Begin Routine:
        # --------------------------
        # 1. Stimulus generation
        # --------------------------

        # orientation: continuous 0-180°
        ori_stim = rng.uniform(0, 180)
        phase_stim = np.random.uniform(0, 2 * np.pi)

        # color: from 180-hue discrete wheel
        col_stim_hue = rng.choice(hue_wheel)


        # --------------------------
        # 2. Cue type and actual task
        # --------------------------

        # O = orientation cue
        # C = color cue
        # A = ambiguous cue
        types = ['O', 'C', 'A', 'A']   # 25%, 25%, 50%
        cueType = rng.choice(types)

        if cueType == 'O':
            actualTask = 'orientation'
        elif cueType == 'C':
            actualTask = 'color'
        else:
            actualTask = rng.choice(['orientation', 'color'])



        # 1. 定义颜色
        target_rgb = np.array(hue_to_rgb(col_stim_hue))

        # 定义背景灰色
        bg_rgb = np.array([0, 0, 0])

        # 2. 创建正弦波 (保持不变)
        # 将 [-1, 1] 映射到 [0, 1]
        res = 256
        x = np.linspace(0, 2*np.pi, res)
        sine_01 = (np.sin(x) + 1) / 2

        # 3. 创建纹理矩阵
        # 现在的逻辑是：在 灰色(bg_rgb) 和 目标色(target_rgb) 之间插值
        diff = target_rgb - bg_rgb
        # 利用广播机制计算：基底色 + 强度 * (色差)
        my_texture = bg_rgb + sine_01[:, None, None] * diff
        # 注意：my_texture 的形状现在是 (256, 1, 3)，可以直接作为纹理传给 GratingStim
      End Routine:
        # ========== END ROUTINE ==========

        # === STIMULUS INFO ===
        thisExp.addData('ori_stim', ori_stim)
        thisExp.addData('col_stim_hue', col_stim_hue)
        thisExp.addData('cueType', cueType)
        thisExp.addData('actualTask', actualTask)
    GratingComponent grating
      color [set every repeat] = 1.0000, 1.0000, 1.0000
      mask = gauss
      ori [set every repeat] = ori_stim
      phase [set every repeat] = phase_stim
      sf = 1.25
      size = (6,6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      tex [set every repeat] = $my_texture
      units = deg
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  Routine ITI
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Blank
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        #win.color = [0.5, 0.5, 0.5]
    TextComponent text_2
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
      units = deg
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  Routine Cue
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    TextComponent text
      letterHeight = 1.5
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
      text [set every repeat] = $cueType
      units = deg
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  Routine ITI_2
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    TextComponent text_3
      letterHeight = 0
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
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  Routine resp_ori
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        # 如果不是方向任务，跳过此 Routine
        if actualTask != 'orientation':
            continueRoutine = False

        # 初始化
        current_ori = np.random.uniform(0, 180)
        response_bar_ori = current_ori # 初始角度
      Each Frame:
        # 获取按键进行调节 (使用 defaultKeyboard 或 event)
        keys = event.getKeys(keyList=['left', 'right', 'up', 'down', 'space'])

        if 'left' in keys:
            current_ori -= 2
        elif 'right' in keys:
            current_ori += 2
        elif 'up' in keys:
            current_ori += 10
        elif 'down' in keys:
            current_ori -= 10
        elif 'space' in keys:
            # 记录数据并结束
            thisExp.addData('ori_resp', wrap_angle(current_ori))
            error = circ_diff_deg(wrap_angle(current_ori), ori_stim, 180)
            thisExp.addData('ori_error', error)
            continueRoutine = False

        # 限制角度并在每一帧更新变量给视觉组件使用
        current_ori = wrap_angle(current_ori)
        # 注意：你需要把这个变量赋值给下面的Polygon组件
  Routine resp_color
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    MouseComponent mouse_color
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_color
      Code Type = Py
      Begin Routine:
        # --- skip routine safely ---
        if not goCol:
            continueRoutine = False
        else:
            mouse_color.clickReset()
            prevMousePressed = False
            win.mouseVisible = False
            responseStage = 2
            defaultLW = 2
            highlightLW = 4
            selectedLW = 7
            oriCircle_color.lineWidth = defaultLW
            if 'oriPointer_color' in dir():
                oriPointer_color.setOpacity(0)
            if 'colorPatch_color' in dir():
                colorPatch_color.setOpacity(0)
            radius = 250.0
            width_normal = 80.0
            width_thick = 90
            n_segments = 360
            overlap_deg = 1
            lineWidth_normal = 8
            lineWidth_thick = 14
            print("Creating color wheels...")
            color_wheel_thick = draw_color_wheel(
                win=win,
                radius=radius,
                width=width_thick,
                n_segments=n_segments,
                overlap_deg=overlap_deg,
                lineWidth=lineWidth_thick
            )
            print("Thick wheel created:", len(color_wheel_thick), "segments")
            color_wheel_inner_r = radius
            color_wheel_outer_r = radius + width_normal

            col_resp_hue = np.nan
            col_error = np.nan
            rt_reproduction = np.nan
            resp_clock = core.Clock()
            mouse_path = []
            mouse_hue_path = []
            t0 = None
            current_hue = 0
            print("=== Routine Started ===")
            print("Stage:", responseStage)
            print("Color wheel range:", color_wheel_inner_r, "-", color_wheel_outer_r)
      Each Frame:
        for seg in color_wheel_thick:
           seg.draw()

        if firstFrame:
            win.mouseVisible = False
            prevMousePressed = False
            firstFrame = False

        else:

            win.mouseVisible = True

            mx, my = mouse_color.getPos()
            cx, cy = oriCircle_color.pos
            r_ori = oriCircle_color.size[0] / 2.0
            d = ((mx - cx)**2 + (my - cy)**2)**0.5
            currentMousePressed = mouse_color.getPressed()[0]


            if mx != 0 or my != 0:
                theta = np.degrees(np.arctan2(my - cy, mx - cx))
                if theta < 0:
                    theta += 360
                current_hue = theta

            if 'colorPatch_color' in dir():
                color_rgb = hue_to_rgb(current_hue)
                colorPatch_color.setFillColor(color_rgb)
                colorPatch_color.setLineColor(color_rgb)
                colorPatch_color.lineWidth = 5
                colorPatch_color.setOpacity(1)
                colorPatch_color.draw()

            if t0 is not None:
                t_now = core.getTime() - t0
                mouse_path.append([mx, my, t_now])
                mouse_hue_path.append([current_hue, t_now])

            if currentMousePressed and not prevMousePressed:
                col_resp_hue = current_hue
                rt_reproduction = resp_clock.getTime()
                print("Color hue recorded:", round(col_resp_hue, 1), "RT:", round(rt_reproduction, 3))
                continueRoutine = False

            if resp_clock.getTime() > 6.0:
                rt_reproduction = 6.0
                print("Time limit reached (6s)")
                continueRoutine = False

            prevMousePressed = currentMousePressed
      End Routine:
        # 标记 resp_any 已经记录了数据
        anyTaskRecorded = True

        try:
            if finalOriAngle is None:
                finalOriAngle = np.nan
        except NameError:
            finalOriAngle = np.nan
        try:
            if col_resp_hue is None:
                col_resp_hue = np.nan
        except NameError:
            col_resp_hue = np.nan
        try:
            if rt_reproduction is None:
                rt_reproduction = np.nan
        except NameError:
            rt_reproduction = np.nan

        # ===============================
        # WRITE DATA
        # ===============================
        if selectedTask in ['ori', 'orientation']:
            thisExp.addData("task", "orientation")
            thisExp.addData("ori_angle", finalOriAngle)
            thisExp.addData("col_resp_hue", np.nan)
            print(f"Orientation task completed - Angle: {finalOriAngle}")

        elif selectedTask == 'color':
            # ====== 调试打印 ======
            print("="*50)
            print("DEBUG before addData:")
            print("  col_resp_hue =", col_resp_hue, "type:", type(col_resp_hue))
            print("  rt_reproduction =", rt_reproduction, "type:", type(rt_reproduction))
            print("="*50)

            thisExp.addData("task", "color")
            thisExp.addData("ori_angle", np.nan)

            try:
                if not np.isnan(col_resp_hue) and not np.isnan(col_stim_hue):
                    col_error = circ_diff_deg(col_resp_hue, col_stim_hue, 360)
                else:
                    col_error = np.nan
            except:
                col_error = np.nan

            thisExp.addData("col_resp_hue", col_resp_hue)
            thisExp.addData("col_error", col_error)
            thisExp.addData("rt_reproduction", rt_reproduction)
            print(f"Color task completed — Hue: {col_resp_hue}, Error: {col_error}")

        else:
            thisExp.addData("task", "NA")
            thisExp.addData("ori_angle", np.nan)
            thisExp.addData("col_resp_hue", np.nan)
            thisExp.addData("col_error", np.nan)
            thisExp.addData("rt_reproduction", np.nan)
            print("No task selected!")

        win.mouseVisible = False
        print("=== Routine Ended ===")
    PolygonComponent oriCircle_color
      lineWidth = 2
      opacity = 0
      saveStartStop = False
      shape = circle
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent colorCircle_color
      lineWidth = 2
      saveStartStop = False
      shape = circle
      size = (500, 500)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent oriPointer_color
      contrast = 0
      fillColor = white
      lineWidth = 5
      opacity = 0
      saveStartStop = False
      shape = line
      size = (200, 60)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent colorPatch_color
      lineWidth = 5
      saveStartStop = False
      shape = circle
      size = (100, 100)
      stopVal [duration (s)] = 6
      units = pix
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  Routine Fixation
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        thisTrial = trials_list_practice[practiceLoop.thisN]

        Block_index = thisTrial['Block_index']
        trial_in_block = thisTrial['trial_in_block']
        ori_stim = thisTrial['ori_stim']
        col_stim_hue = thisTrial['col_stim_hue']
        cueType = thisTrial['cueType']
        actualTaskCode = thisTrial['actualTask_']
        actualTask = 'orientation' if actualTaskCode == 'O' else 'color'


        thisExp.addData('ori_stim', ori_stim)
        thisExp.addData('col_stim_hue', col_stim_hue)
        thisExp.addData('cueType', cueType)
        thisExp.addData('actualTask', actualTask)
        thisExp.addData('Block_index', Block_index)
        thisExp.addData('trial_in_block', trial_in_block)
    TextComponent fix_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = deg
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  Routine Resp_ChoiceRouter
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    CodeComponent router
      Code Type = Py
      Begin Routine:
        # Decide which task to run on this trial
        if cueType == 'O': # task type = orientation
            goOri = True
            goCol = False
            goAny = False
        elif cueType == 'A':
            goOri = False
            goCol = False
            goAny = True
        else:
            goOri = False
            goCol = True
            goAny = False

        # This routine finishes immediately
        continueRoutine = False
      End Routine:
        win.mouseVisible = False
  Routine resp_oriation
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    MouseComponent mouse_ori
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent oriCircle_ori
      lineWidth = 2
      saveStartStop = False
      shape = circle
      size = (300, 300)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent oriPointer_ori
      contrast = 0
      fillColor = white
      lineWidth = 5
      saveStartStop = False
      shape = line
      size = (200, 60)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_ori
      Code Type = Py
      Begin Routine:
        if not goOri:
            continueRoutine = False
        else:
            # 所有代码都要缩进到这里！
            responseStage = 2
            selectedTask = 'ori'
            finalOriAngle = None
            mouse_ori.clickReset()
            prevMousePressed = False
            win.mouseVisible = False
            defaultLW = 2
            highlightLW = 4
            selectedLW = 7
            oriCircle_ori.lineWidth = defaultLW
            if 'oriPointer_ori' in dir():
                oriPointer_ori.setOpacity(0)
            if 'colorPatch_ori' in dir():
                colorPatch_ori.setOpacity(0)
            radius = 250.0
            width_normal = 80.0
            width_thick = 90
            n_segments = 360
            overlap_deg = 1
            lineWidth_normal = 8
            lineWidth_thick = 14
            print("Creating color wheels...")
            color_wheel_inner_r = radius
            color_wheel_outer_r = radius + width_normal
            col_resp_hue = np.nan
            col_error = np.nan
            rt_reproduction = np.nan
            resp_clock = core.Clock()
            mouse_path = []
            mouse_hue_path = []
            t0 = None
            current_hue = 0
            print("=== Routine Started ===")
            print("Stage:", responseStage)
            print("Color wheel range:", color_wheel_inner_r, "-", color_wheel_outer_r)
      Each Frame:
        if frameN < 1:
            win.mouseVisible = False
            prevMousePressed = False
        else:
            win.mouseVisible = True
        mx, my = mouse_ori.getPos()
        cx, cy = oriCircle_ori.pos
        r_ori = oriCircle_ori.size[0] / 2.0
        d = ((mx - cx)**2 + (my - cy)**2)**0.5
        currentMousePressed = mouse_ori.getPressed()[0]

        # 修复：把 elif 改成 if，让 print 和响应检测独立运行
        if frameN % 30 == 0:
            print("Distance:", round(d, 1), "| On wheel:", is_on_color_wheel, "| Stage:", responseStage, "| Task:", selectedTask)

        # ============================================================
        # 修复：elif → if
        if responseStage == 2:
            selectedTask = 'ori'
            print(">>> Selected: ORIENTATION")
            '''
            if selectedTask == 'color':
                if frameN % 30 == 0:
                    print(">>> STAGE 2 - DRAWING THICK WHEEL <<<")
                for seg in color_wheel_thick:
                    seg.draw()
            else:
                if frameN % 30 == 0:
                    print(">>> STAGE 2 - DRAWING NORMAL WHEEL <<<")
                for seg in color_wheel_segments:
                    seg.draw()
            '''

            if selectedTask == 'ori':
                oriCircle_ori.lineWidth = selectedLW
            else:
                oriCircle_ori.lineWidth = defaultLW
            # ORIENTATION TASK
            if selectedTask == 'ori':
                currentAngle = np.degrees(np.arctan2(my - cy, mx - cx))

                if 'oriPointer_ori' in dir():
                    oriPointer_ori.setOri(currentAngle)
                    oriPointer_ori.setOpacity(1)

                if currentMousePressed and not prevMousePressed:
                    finalOriAngle = currentAngle
                    print("Orientation angle recorded:", finalOriAngle)
                    continueRoutine = False


        if responseStage == 2 or not currentMousePressed:
            prevMousePressed = currentMousePressed

        if firstFrame:
            core.wait(0)           # 等待第一次 flip
            win.mouseVisible = True
            firstFrame = False
        if 'col_resp_hue' not in dir():
            col_resp_hue = np.nan
        if 'col_error' not in dir():
            col_error = np.nan
        if 'rt_reproduction' not in dir():
            rt_reproduction = np.nan
        if 'finalOriAngle' not in dir():
            finalOriAngle = np.nan
        # 检查是否存在，或者是否依然是 None
        if 'finalOriAngle' not in dir() or finalOriAngle is None:
            finalOriAngle = np.nan
        if selectedTask == 'ori':

            thisExp.addData("task", "orientation")
            thisExp.addData("ori_angle", finalOriAngle)
            print("Orientation task completed - Angle:", round(finalOriAngle, 6) if not np.isnan(finalOriAngle) else "NA")
        win.mouseVisible = False
        print("=== Routine Ended ===")
      End Routine:
        # 如果 resp_any 已经记录了数据，跳过
        if 'anyTaskRecorded' in dir() and anyTaskRecorded:
            print("resp_ori skipped - resp_any already recorded data")
        elif not goOri:
            print("resp_ori skipped - no data written")
        else:
            # ===============================
            # 正常记录数据
            # ===============================
            if 'col_resp_hue' not in dir():
                col_resp_hue = np.nan
            if 'col_error' not in dir():
                col_error = np.nan
            if 'rt_reproduction' not in dir():
                rt_reproduction = np.nan
            if 'finalOriAngle' not in dir() or finalOriAngle is None:
                finalOriAngle = np.nan

            if selectedTask == 'ori':
                thisExp.addData("task", "orientation")
                thisExp.addData("ori_angle", finalOriAngle)
                print("Orientation task completed - Angle:", round(finalOriAngle, 6) if not np.isnan(finalOriAngle) else "NA")

            win.mouseVisible = False
            print("=== Routine Ended ===")
    PolygonComponent colorCircle_ori
      lineWidth = 2
      opacity = 0
      saveStartStop = False
      shape = circle
      size = (500, 500)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent colorPatch_ori
      lineWidth = 5
      opacity = 0
      saveStartStop = False
      shape = circle
      size = (100, 100)
      stopVal [duration (s)] = 6
      units = pix
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  Routine routine_1
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    SliderComponent confidence
      color [set every frame] = 1,1,1
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      granularity = 1
      labels = 'N','','','','V'
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (20.0, 3)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,2,3,4,5)
      units = deg
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        mouse_ori.setVisible(True)
      End Routine:
        mouse_ori.setVisible(False)


        confidence_value = confidence.getRating()
        confidence_rt = confidence.getRT()


        thisExp.addData('confidence', confidence_value)
        thisExp.addData('rt_confidence', confidence_rt)
  Routine routine
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    ImageComponent stimulus
      image = default.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    SliderComponent attractiveness
      forceEndRoutine = True
      granularity = 0.1
      labels = "Not attractive", "Neutral", "Attractive"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine slidertest
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    SliderComponent Confidence_7scale
      font = Noto Sans
      forceEndRoutine = True
      granularity = 1
      labels = '1','2','3','4','5','6','7'
      letterHeight = 2
      pos = (0.1, -0.4)
      saveStartStop = False
      size = (15.0,3.0)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (1, 2, 3, 4, 5, 6, 7)
      units = deg
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    CodeComponent code_8
      Code Type = Both
      Begin JS Routine:
        // mouse_color.setVisible(true);
      Begin Routine:
        # mouse_ori.setVisible(True)
        win.mouseVisible = True
      End JS Routine:
        //mouse_ori.setVisible(false);
        confidence_value = Confidence_7scale.getRating();
        confidence_rt = Confidence_7scale.getRT();
        psychoJS.experiment.addData("confidence", confidence_value);
        psychoJS.experiment.addData("rt_confidence", confidence_rt);
      End Routine:
        # mouse_ori.setVisible(False)
        win.mouseVisible = False


        confidence_value = Confidence_7scale.getRating()
        confidence_rt = Confidence_7scale.getRT()


        thisExp.addData('confidence', confidence_value)
        thisExp.addData('rt_confidence', confidence_rt)

        if 'ori_resp_angle' in locals():
            thisExp.addData('ori_resp_angle', ori_resp_angle)
            if 'ori_error' in locals():
                thisExp.addData('ori_error', ori_error)
            if 'rt_ori' in locals():
                thisExp.addData('rt_ori', rt_ori)

        if 'col_resp_hue' in locals():
            thisExp.addData('col_resp_hue', col_resp_hue)
            if 'col_error' in locals():
                thisExp.addData('col_error', col_error)

        if 'confidence' in locals():
            thisExp.addData('confidence', confidence)
        if 'rt_confidence' in locals():
            thisExp.addData('rt_confidence', rt_confidence)
    TextComponent Instruction_Confidence
      letterHeight = 1.25
      pos = (0, 6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 35
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      text:
        Please rate your confidence in your response.
        (1=no confidence, 7=high confidence)
  Routine blockbreak
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    CodeComponent block_rest
      Code Type = Py
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      Begin Routine:
        block_msg = ""

        if 'practiceLoop' in locals() and currentLoop == practiceLoop:
            continueRoutine = False

        else:

            if 'trial_in_block' in locals() and trial_in_block == trials_per_block:

                block_msg = f"Block {Block_index}/{total_blocks} .\n\nPress SPACE to continue."
            else:
                continueRoutine = False
    TextComponent text_4
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
      units = deg
      wrapWidth = 30
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    KeyboardComponent Rest_wait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine expstart
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    TextComponent text_5
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = The practice session has concluded. The formal experiment will now commence. Please press the spacebar to proceed.
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine INIT
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    CodeComponent code_9
      Code Type = Py
      Begin Experiment:
        import numpy as np
        import random

        # ===========================
        # Create PRACTICE trials
        # ===========================
        trials_list_practice = []
        for i in range(30):
            cue = random.choices(['O','C','A'], [0.25,0.25,0.5])[0]
            task = cue if cue in ['O','C'] else random.choice(['O','C'])
            trials_list_practice.append({
                'Block_index': 0,
                'trial_in_block': i+1,
                'ori_stim': int(np.random.randint(0,180)),
                'col_stim_hue': int(np.random.choice(np.arange(0,360,2))),
                'cueType': cue,
                'actualTask_': task
            })

        # ===========================
        # Create MAIN trials
        # ===========================
        total_blocks = 8
        trials_per_block = 60
        n_per_cond = 15
        block_template = (
            [('O', 'O')] * n_per_cond +
            [('C', 'C')] * n_per_cond +
            [('A', 'O')] * n_per_cond +
            [('A', 'C')] * n_per_cond
        )
        trials_list_main = []
        for b in range(total_blocks):
            block_idx = b + 1
            conds = block_template.copy()
            random.shuffle(conds)
            for t_idx, (cue, task) in enumerate(conds):
                trials_list_main.append({
                    'Block_index': block_idx,
                    'trial_in_block': t_idx + 1,
                    'ori_stim': int(np.random.randint(0,180)),
                    'col_stim_hue': int(np.random.choice(np.arange(0,360,2))),
                    'cueType': cue,
                    'actualTask_': task
                })
  Routine Fix2
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    TextComponent text_6
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = deg
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        mouse_ori.setVisible(False)
        # ================================

        # ================================
        thisTrial = trials_list_main[mainLoop.thisN]

        Block_index = thisTrial['Block_index']
        trial_in_block = thisTrial['trial_in_block']
        ori_stim = thisTrial['ori_stim']
        col_stim_hue = thisTrial['col_stim_hue']
        cueType = thisTrial['cueType']
        actualTaskCode = thisTrial['actualTask_']
        actualTask = 'orientation' if actualTaskCode == 'O' else 'color'


        thisExp.addData('ori_stim', ori_stim)
        thisExp.addData('col_stim_hue', col_stim_hue)
        thisExp.addData('cueType', cueType)
        thisExp.addData('actualTask', actualTask)
        thisExp.addData('Block_index', Block_index)
        thisExp.addData('trial_in_block', trial_in_block)


        print(f"Main Trial - Block: {Block_index}, Trial: {trial_in_block}, Cue: {cueType}, Task: {actualTask}")
  Routine resp_any
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    MouseComponent mouse_any
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_any
      Code Type = Py
      Before Experiment:
        import numpy as np
        import colorsys
        from psychopy import visual
        def hue_to_rgb(hue_deg):
            """

            """
            h = hue_deg / 360.0
            r, g, b = colorsys.hsv_to_rgb(h, 1.0, 1.0)
            return [r*2-1, g*2-1, b*2-1]

        def circ_diff_deg(a, b, period=360.0):
            """
            计算两个角度之间的循环差值
            例如：circ_diff_deg(10, 350) = 20 (不是 -340)
            """
            diff = (a - b + period/2.0) % period - period/2.0
            return diff

        def draw_color_wheel(win, radius, width, n_segments=180, overlap_deg=2, lineWidth=10):
            """

            """
            segments = []

            for i in range(n_segments):
                hue = i * (360.0 / n_segments)
                angle = hue + overlap_deg
                rad = np.radians(angle)


                x1 = radius * np.cos(rad)
                y1 = radius * np.sin(rad)
                x2 = (radius + width) * np.cos(rad)
                y2 = (radius + width) * np.sin(rad)


                seg = visual.Line(
                    win,
                    start=(x1, y1),
                    end=(x2, y2),
                    lineColor=hue_to_rgb(hue),
                    lineWidth=lineWidth,
                    units='pix'
                )
                segments.append(seg)

            return segments
      Begin Routine:
        # --- skip routine safely ---
        if not goAny:
            continueRoutine = False
        is_on_color_wheel = False
        mx = 0
        my = 0
        d = 999

        responseStage = 1
        selectedTask = None
        finalOriAngle = None

        mouse_any.clickReset()
        prevMousePressed = False
        win.mouseVisible = False


        defaultLW = 2
        highlightLW = 4
        selectedLW = 7
        oriCircle_any.lineWidth = defaultLW


        if 'oriPointer_any' in dir():
            oriPointer_any.setOpacity(1)
        if 'colorPatch_any' in dir():
            colorPatch_any.setOpacity(0)


        radius = 250.0
        width_normal = 80.0
        width_thick = 90
        n_segments = 360
        overlap_deg = 1
        lineWidth_normal = 8
        lineWidth_thick = 14

        print("Creating color wheels...")


        color_wheel_segments = draw_color_wheel(
            win=win,
            radius=radius,
            width=width_normal,
            n_segments=n_segments,
            overlap_deg=overlap_deg,
            lineWidth=lineWidth_normal
        )

        print("Normal wheel created:", len(color_wheel_segments), "segments")


        color_wheel_thick = draw_color_wheel(
            win=win,
            radius=radius,
            width=width_thick,
            n_segments=n_segments,
            overlap_deg=overlap_deg,
            lineWidth=lineWidth_thick
        )

        print("Thick wheel created:", len(color_wheel_thick), "segments")

        color_wheel_inner_r = radius
        color_wheel_outer_r = radius + width_normal

        win.mouseVisible = False
        firstFrame = True

        col_resp_hue = np.nan
        col_error = np.nan
        rt_reproduction = np.nan
        resp_clock = core.Clock()
        mouse_path = []
        mouse_hue_path = []
        t0 = None
        current_hue = 0
      Each Frame:
        if frameN < 1:
            win.mouseVisible = False
            prevMousePressed = False

            for seg in color_wheel_segments:
                seg.draw()

        else:
            win.mouseVisible = True

        # win.mouseVisible = True
        mx, my = mouse_any.getPos()
        cx, cy = oriCircle_any.pos
        r_ori = oriCircle_any.size[0] / 2.0
        d = ((mx - cx)**2 + (my - cy)**2)**0.5

        currentMousePressed = mouse_any.getPressed()[0]


        is_on_color_wheel = (color_wheel_inner_r <= d <= color_wheel_outer_r)


        if frameN % 30 == 0:
            print("Distance:", round(d, 1), "| On wheel:", is_on_color_wheel, "| Stage:", responseStage, "| Task:", selectedTask)

        # ============================================================
        #  STAGE 1 — SELECT TASK
        # ============================================================
        if responseStage == 1:


            if is_on_color_wheel:
                if frameN % 30 == 0:
                    print(">>> DRAWING THICK WHEEL <<<")
                for seg in color_wheel_thick:
                    seg.draw()
            else:
                if frameN % 30 == 0:
                    print(">>> DRAWING NORMAL WHEEL <<<")
                for seg in color_wheel_segments:
                    seg.draw()


            if d <= r_ori:
                oriCircle_any.lineWidth = highlightLW
            else:
                oriCircle_any.lineWidth = defaultLW


            if currentMousePressed and not prevMousePressed:
                if d <= r_ori:
                    selectedTask = 'ori'
                    print(">>> Selected: ORIENTATION")
                elif is_on_color_wheel:
                    selectedTask = 'color'
                    if 'col_stim_hue' in dir():
                        current_hue = (col_stim_hue + np.random.uniform(-60, 60)) % 360
                    else:
                        current_hue = np.random.uniform(0, 360)
                    resp_clock.reset()
                    t0 = core.getTime()
                    mouse_path = []
                    mouse_hue_path = []
                    print(">>> Selected: COLOR - Initial hue:", round(current_hue, 1))
                else:
                    selectedTask = None

                if selectedTask is not None:
                    responseStage = 2
                    prevMousePressed = True

        # ============================================================
        #  STAGE 2 — RESPONSE
        # ============================================================
        elif responseStage == 2:


            if selectedTask == 'color':
                if frameN % 30 == 0:
                    print(">>> STAGE 2 - DRAWING THICK WHEEL <<<")
                for seg in color_wheel_thick:
                    seg.draw()
                oriPointer_any.setOpacity(0)
            else:
                if frameN % 30 == 0:
                    print(">>> STAGE 2 - DRAWING NORMAL WHEEL <<<")
                for seg in color_wheel_segments:
                    seg.draw()


            if selectedTask == 'ori':
                oriCircle_any.lineWidth = selectedLW
            else:
                oriCircle_any.lineWidth = defaultLW

            # ORIENTATION TASK
            if selectedTask == 'ori':
                currentAngle = np.degrees(np.arctan2(my - cy, mx - cx))

                if 'oriPointer_any' in dir():
                    oriPointer_any.setOri(currentAngle)
                    oriPointer_any.setOpacity(1)

                if currentMousePressed and not prevMousePressed:
                    finalOriAngle = currentAngle
                    print("Orientation angle recorded:", finalOriAngle)
                    continueRoutine = False

            # COLOR TASK
            elif selectedTask == 'color':
                if mx != 0 or my != 0:
                    theta = np.degrees(np.arctan2(my - cy, mx - cx))
                    if theta < 0:
                        theta += 360
                    current_hue = theta

                if 'colorPatch_any' in dir():
                    color_rgb = hue_to_rgb(current_hue)
                    colorPatch_any.setFillColor(color_rgb)
                    colorPatch_any.setLineColor(color_rgb)
                    colorPatch_any.lineWidth = 5
                    colorPatch_any.setOpacity(1)
                    colorPatch_any.draw()

                if t0 is not None:
                    t_now = core.getTime() - t0
                    mouse_path.append([mx, my, t_now])
                    mouse_hue_path.append([current_hue, t_now])

                if currentMousePressed and not prevMousePressed:
                    col_resp_hue = current_hue
                    rt_reproduction = resp_clock.getTime()
                    print("Color hue recorded:", round(col_resp_hue, 1), "RT:", round(rt_reproduction, 3))
                    continueRoutine = False

                if resp_clock.getTime() > 6.0:
                    rt_reproduction = 6.0
                    print("Time limit reached (6s)")
                    continueRoutine = False


        # ---- 在第一帧 flip 后才显示鼠标 ----
        if firstFrame:
            core.wait(0)   # 让 builder 完成第一次 flip
            win.mouseVisible = True
            firstFrame = False

        if responseStage == 2 or not currentMousePressed:
            prevMousePressed = currentMousePressed
      End Routine:
        # ===============================
        # 如果 routine 被跳过，不记录数据
        # ===============================
        if not goAny:
            print("resp_any skipped - no data written")
            win.mouseVisible = False
        else:
            # ===============================
            # 标记已记录数据
            # ===============================
            anyTaskRecorded = True

            if selectedTask is None:
                selectedTask = actualTask   # fallback

            # 使用 try-except 代替 globals() 检查
            try:
                if finalOriAngle is None:
                    finalOriAngle = np.nan
            except NameError:
                finalOriAngle = np.nan
            try:
                if col_resp_hue is None:
                    col_resp_hue = np.nan
            except NameError:
                col_resp_hue = np.nan
            try:
                if rt_reproduction is None:
                    rt_reproduction = np.nan
            except NameError:
                rt_reproduction = np.nan

            # ===============================
            # WRITE DATA
            # ===============================
            # --- ORIENTATION TASK ---
            if selectedTask in ['ori', 'orientation']:
                thisExp.addData("task", "orientation")
                thisExp.addData("ori_angle", finalOriAngle)
                thisExp.addData("col_resp_hue", np.nan)
                thisExp.addData("col_error", np.nan)
                thisExp.addData("rt_reproduction", np.nan)
                print(f"Orientation task completed - Angle: {finalOriAngle}")

            # --- COLOR TASK ---
            elif selectedTask == 'color':
                thisExp.addData("task", "color")
                thisExp.addData("ori_angle", np.nan)
                try:
                    if not np.isnan(col_resp_hue) and not np.isnan(col_stim_hue):
                        col_error = circ_diff_deg(col_resp_hue, col_stim_hue, 360)
                    else:
                        col_error = np.nan
                except:
                    col_error = np.nan
                thisExp.addData("col_resp_hue", col_resp_hue)
                thisExp.addData("col_error", col_error)
                thisExp.addData("rt_reproduction", rt_reproduction)
                print(f"Color task completed — Hue: {col_resp_hue}, Error: {col_error}")

            # --- NOTHING SELECTED ---
            else:
                thisExp.addData("task", "NA")
                thisExp.addData("ori_angle", np.nan)
                thisExp.addData("col_resp_hue", np.nan)
                thisExp.addData("col_error", np.nan)
                thisExp.addData("rt_reproduction", np.nan)
                print("No task selected!")

            win.mouseVisible = False
            print("=== Routine Ended ===")
    PolygonComponent oriCircle_any
      lineWidth = 2
      saveStartStop = False
      shape = circle
      size = (300, 300)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      units = pix
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    PolygonComponent colorCircle_any
      lineWidth = 2
      saveStartStop = False
      shape = circle
      size = (500, 500)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      units = pix
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    PolygonComponent oriPointer_any
      contrast = 0
      fillColor = white
      lineWidth = 5
      saveStartStop = False
      shape = line
      size = (200, 60)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      units = pix
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    PolygonComponent colorPatch_any
      lineWidth = 5
      saveStartStop = False
      shape = circle
      size = (100, 100)
      stopVal [duration (s)] = 6
      syncScreenRefresh = False
      units = pix
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Flow
  Routine INIT
  Routine Instr
  LoopInitiator practiceLoop loopType="TrialHandler"
    loopType = sequential
    nReps = len(trials_list_practice)
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    conditions:
      [OrderedDict([('Block_index', np.int64(0)), ('trial_index', np.int64(1)), ('ori_stim', np.int64(50)), ('col_stim_hue', np.int64(126)), ('cueType', 'A'), ('actualTask_', 'C')]),
      OrderedDict([('Block_index', np.int64(0)), ('trial_index', np.int64(2)), ('ori_stim', np.int64(73)), ('col_stim_hue', np.int64(218)), ('cueType', 'A'), ('actualTask_', 'C')]),
      OrderedDict([('Block_index', np.int64(0)), ('trial_index', np.int64(3)), ('ori_stim', np.int64(5)), ('col_stim_hue', np.int64(126)), ('cueType', 'A'), ('actualTask_', 'O')]),
      OrderedDict([('Block_index', np.int64(0)), ('trial_index', np.int64(4)), ('ori_stim', np.int64(116)), ('col_stim_hue', np.int64(8)), ('cueType', 'C'), ('actualTask_', 'C')]),
      OrderedDict([('Block_index', np.int64(0)), ('trial_index', np.int64(5)), ('ori_stim', np.int64(119)), ('col_stim_hue', np.int64(102)), ('cueType', 'C'), ('actualTask_', 'C')]),
      OrderedDict([('Block_index', np.int64(0)), ('trial_index', np.int64(6)), ('ori_stim', np.int64(110)), ('col_stim_hue', np.int64(190)), ('cueType', 'A'), ('actualTask_', 'O')]),
      OrderedDict([('Block_index', np.int64(0)), ('trial_index', np.int64(7)), ('ori_stim', np.int64(158)), ('col_stim_hue', np.int64(24)), ('cueType', 'O'), ('actualTask_', 'O')]),
      OrderedDict([('Block_index', np.int64(0)), ('trial_index', np.int64(8)), ('ori_stim', np.int64(135)), ('col_stim_hue', np.int64(256)), ('cueType', 'C'), ('actualTask_', 'C')])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
    Routine Fixation
    Routine encoding
    Routine Blank
    Routine Cue
    Routine ITI_2
    Routine Resp_ChoiceRouter
    Routine resp_any
    Routine resp_oriation
    Routine resp_color
    Routine ITI_2
    Routine slidertest
  LoopTerminator practiceLoop
  Routine expstart
  LoopInitiator mainLoop loopType="TrialHandler"
    loopType = sequential
    nReps = len(trials_list_main)
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    conditions:
      [OrderedDict([('Block_index', np.int64(1)), ('trial_index', np.int64(1)), ('trial_in_block', np.int64(1)), ('ori_stim', np.int64(65)), ('col_stim_hue', np.int64(120)), ('cueType', 'A'), ('actualTask_', 'C')]),
      OrderedDict([('Block_index', np.int64(1)), ('trial_index', np.int64(2)), ('trial_in_block', np.int64(2)), ('ori_stim', np.int64(87)), ('col_stim_hue', np.int64(134)), ('cueType', 'A'), ('actualTask_', 'O')]),
      OrderedDict([('Block_index', np.int64(1)), ('trial_index', np.int64(3)), ('trial_in_block', np.int64(3)), ('ori_stim', np.int64(66)), ('col_stim_hue', np.int64(162)), ('cueType', 'O'), ('actualTask_', 'O')]),
      OrderedDict([('Block_index', np.int64(1)), ('trial_index', np.int64(4)), ('trial_in_block', np.int64(4)), ('ori_stim', np.int64(70)), ('col_stim_hue', np.int64(114)), ('cueType', 'C'), ('actualTask_', 'C')]),
      OrderedDict([('Block_index', np.int64(1)), ('trial_index', np.int64(5)), ('trial_in_block', np.int64(5)), ('ori_stim', np.int64(174)), ('col_stim_hue', np.int64(230)), ('cueType', 'C'), ('actualTask_', 'C')]),
      OrderedDict([('Block_index', np.int64(1)), ('trial_index', np.int64(6)), ('trial_in_block', np.int64(6)), ('ori_stim', np.int64(102)), ('col_stim_hue', np.int64(102)), ('cueType', 'A'), ('actualTask_', 'O')]),
      OrderedDict([('Block_index', np.int64(1)), ('trial_index', np.int64(7)), ('trial_in_block', np.int64(7)), ('ori_stim', np.int64(35)), ('col_stim_hue', np.int64(92)), ('cueType', 'O'), ('actualTask_', 'O')])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
    Routine Fix2
    Routine encoding
    Routine Blank
    Routine Cue
    Routine ITI_2
    Routine Resp_ChoiceRouter
    Routine resp_any
    Routine resp_oriation
    Routine resp_color
    Routine ITI_2
    Routine slidertest
    Routine blockbreak
  LoopTerminator mainLoop
